PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emotion_nonemotion
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent stimuli
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $S1
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please solve this math problem while the next set of sentences are displayed.

        64 divided by 4

        You do not need to enter any answer. Press the space bar key once you have calculated the answer.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2
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    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $S2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_EN.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'S1': 'Grateful ', 'E_N': 'E', 'S2': 'Proud '},
      {'S1': 'Walk', 'E_N': 'N', 'S2': 'Table'},
      {'S1': 'Hopeful', 'E_N': 'E', 'S2': 'Guilty'},
      {'S1': 'Bridge', 'E_N': 'N', 'S2': 'Spoon'},
      {'S1': 'Amused', 'E_N': 'E', 'S2': 'Happy '},
      {'S1': 'Speak', 'E_N': 'N', 'S2': 'Pencil'},
      {'S1': 'Sad', 'E_N': 'E', 'S2': 'Love'}]
    Routine trial
  LoopTerminator trials
  Routine pause
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_EN.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'S1': 'Grateful ', 'E_N': 'E', 'S2': 'Proud '},
      {'S1': 'Walk', 'E_N': 'N', 'S2': 'Table'},
      {'S1': 'Hopeful', 'E_N': 'E', 'S2': 'Guilty'},
      {'S1': 'Bridge', 'E_N': 'N', 'S2': 'Spoon'},
      {'S1': 'Amused', 'E_N': 'E', 'S2': 'Happy '},
      {'S1': 'Speak', 'E_N': 'N', 'S2': 'Pencil'},
      {'S1': 'Sad', 'E_N': 'E', 'S2': 'Love'}]
    Routine trial_2
  LoopTerminator trials_2
