PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = selfpacedreading
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent stimuli
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $S1
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
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    TextComponent stimuli_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $S2
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please solve this math problem while the next set of sentences are displayed.

        64 divided by 4

        You do not need to enter any answer. Press the space bar key once you have calculated the answer.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_sprt.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'S1': 'The old man the boats.', 'S2': 'The old man walked to the boat.'},
      {'S1': 'The horse raced past the barn fell.', 'S2': 'The horse raced past the barn has fallen.'},
      {'S1': 'The man who hunts ducks out on weekends.', 'S2': 'The man who hunts ducks usually does so on weekends. '},
      {'S1': 'The boy threw the ball played outside. ', 'S2': 'The boy who threw the ball played outside afterward. '},
      {'S1': 'The girl told the story cried. ', 'S2': 'The girl who told the story cried afterward. '}]
    Routine trial
  LoopTerminator trials
  Routine pause
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_sprt.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'S1': 'The old man the boats.', 'S2': 'The old man walked to the boat.'},
      {'S1': 'The horse raced past the barn fell.', 'S2': 'The horse raced past the barn has fallen.'},
      {'S1': 'The man who hunts ducks out on weekends.', 'S2': 'The man who hunts ducks usually does so on weekends. '},
      {'S1': 'The boy threw the ball played outside. ', 'S2': 'The boy who threw the ball played outside afterward. '},
      {'S1': 'The girl told the story cried. ', 'S2': 'The girl who told the story cried afterward. '}]
    Routine trial2
  LoopTerminator trials_2
