PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Adaptive_Staircase
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    GratingComponent grating
      contrast = 0.5
      mask = gauss
      ori [set every repeat] = 0
      sf = 8
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
Flow
  Routine trial
